PsychoPy2experiment version="1.81.00"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'participant': u'100', u'# of letters': u'2', u'Handedness': u'Right', u'Reps': u'100', u'Gender': u'female'}
  Save csv file = True
  expName = Rosvold CPT
  logging level = debug
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine RestingState
    TextComponent text_10
      stopVal [duration (s)] = 9.9995
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Please focus on the crosshair while being scanned. This will last ten minutes.

        This screen will be up for 10 seconds.
    TextComponent text_11
      text = +
      stopVal [duration (s)] = 600
      startVal [time (s)] = 10
      letterHeight = 0.1
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  Routine task2
    TextComponent text_3
      text [set every repeat] = $list2[trials_2.thisN]
      stopVal [duration (s)] = .085
      startVal [time (s)] = 0.0
      letterHeight = .5
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    KeyboardComponent key_resp_5
      correctAns = $corAns
      storeCorrect = True
      stopVal [duration (s)] = .985
      forceEndRoutine = False
      allowedKeys [set every repeat] = expButton
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Begin Experiment:
        corAns = 'space'
      Begin Routine:
        if list2[trials_2.thisN] == 'X':
            corAns = 'space'
            print "It's an X!", list2[trials_2.thisN]
        else:
            corAns = 'None'
            print "It's not an X.", list2[trials_2.thisN]
        print "Begin Routine thisN = ", trials_2.thisN
      End Routine:
        trials.addData("Letter", list2[trials_2.thisN], trials_2.thisN)
    KeyboardComponent key_resp_13
      stopVal [duration (s)] = .985
      forceEndRoutine = False
      discard previous = False
      allowedKeys = '*'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine task
    TextComponent text
      text [set every repeat] = $list1[trials.thisN]
      stopVal [duration (s)] = .085
      startVal [time (s)] = 0
      letterHeight = 0.5
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    KeyboardComponent key_resp_3
      correctAns = $corAns
      storeCorrect = True
      stopVal [duration (s)] = .985
      forceEndRoutine = False
      allowedKeys [set every repeat] = expButton
      startVal [time (s)] = 0
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    CodeComponent code
      Begin Experiment:
        corAns = 'space'
      Begin Routine:
        if list1[trials.thisN] == 'X':
            corAns = 'space'
            print "It's an X!", list1[trials.thisN]
        else:
            corAns = 'None'
            print "It's not an X.", list1[trials.thisN]
        print "Begin Routine thisN = ", trials.thisN
      End Routine:
        trials.addData("Letter", list1[trials.thisN], trials.thisN)

        '''
        if list1[trials.thisN] == "X":
            if key_resp_3 == 1:
                trials.addData("Correct Response", 1, trials.thisN)
            else:
                trials.addData("Incorrect Response", 1, trials.thisN)
        else:
            if key_resp_3 == 1:
                trials.addData("Correct Response", 0, trials.thisN)
            else:
                trials.addData("Incorrect Response", 0, trials.thisN)

        print "End Routine thisN = ", trials.thisN
        '''
      Each Frame:
        print trials.thisN
    KeyboardComponent key_resp_8
      stopVal [duration (s)] = .985
      forceEndRoutine = False
      discard previous = False
      allowedKeys = '*'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine end
    TextComponent text_9
      text = Thank you, the study is complete. Please wait patiently for the technician to assist you out of the MRI.
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_5
      Begin Routine:
        text_2 = visual.TextStim(win=win, ori=0, name='text_2',
            text=u"Thank you!\nYou got " + str(correctAns) + " correct.",    font=u'Arial',
            pos=[0, 0], height=0.1, wrapWidth=None,
            color=u'white', colorSpace=u'rgb', opacity=1,
            depth=0.0)
  Routine fixation
    TextComponent text_7
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent nBack_2
      Begin Routine:
        #array of letters to sample from
        lets = map(chr, range(65, 91))
        #pick random number from 1-100 for determining if this is an nBack round or not
        bias = randint(1, 100)
        print 'Bias:'
        print bias
        currentLetter = lets[randint(0,25)]
        print currentLetter
        #check that enough rounds have passed to display an nBack
        if position-nBack >= 0:
        #determine if next letter will be new or a nBack match, currently 50/50 odds
                if bias < 50:
                    currentLetter = oldLets[position-nBack]
                    print "nbacked"
                    print currentLetter
                    corAns = 1
                else:
                    corAns = "None"
    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = '8'
      startVal [time (s)] = 0.0
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  Routine Welcome_AX_2
    TextComponent text_5
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        This time, only when the letter X follows the letter A, Press SpaceBar

        This screen will be up for 20 seconds.
  Routine Welcome_AX
    TextComponent text_4
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        In this task, letters will be presented rapidly on the screen one at a time.
        Anytime you see the letter X, press the button 1.

        PThis screen will be up for 20 minutes.
    KeyboardComponent key_resp_6
      stopVal [duration (s)] = 20
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trials_3
    TextComponent text_8
      text [set every repeat] = $currentLetter
      stopVal [duration (s)] = .9995
      startVal [time (s)] = 0.0
      letterHeight = .5
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    KeyboardComponent key_resp_10
      correctAns = $corAns
      storeCorrect = True
      stopVal [duration (s)] = .9995
      forceEndRoutine = False
      allowedKeys [set every repeat] = correctButton
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Begin Experiment:
        nBackLetter = 'A'
        currentLetter = 'A'
        oldLets = []
        lets = []
        position=0
        correctAns=0
        nBack = int(expInfo['# of letters'])
        print nBack
      End Routine:
        oldLets.append(currentLetter)
        print oldLets
        if position-nBack >= 0:
            print oldLets[position-nBack]
            print position-nBack
            if currentLetter == oldLets[position-nBack]:
                print 'Current letter is a match'
                print key_resp_3.keys
                if (key_resp_3.keys == 'right'):
                    key_resp_3.corr = 1
                    correctAns = correctAns + 1
                    print 'good'
                    print correctAns
                else:
                    key_resp_3.corr = 0
                    print 'bad'
            if currentLetter != oldLets[position-nBack]:
                print 'Current letter is not a match'
                print key_resp_3.keys
                if (key_resp_3.keys == 'left'):
                    key_resp_3.corr = 1
                    correctAns = correctAns + 1
                    print 'good'
                    print correctAns
                else:
                    key_resp_3.corr = 0
                    print 'bad'
        position = position + 1
    KeyboardComponent key_resp_12
      stopVal [duration (s)] = .9995
      forceEndRoutine = False
      discard previous = False
      allowedKeys = '*'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine trial
    TextComponent Welcome
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to the Rosvold Continuous Performance Task

        Press any button to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Begin Experiment:
        from random import shuffle
        from psychopy.hardware.emulator import launchScan

        '''
        ###########################MRI PARAMATERS
        MR_settings = {
            'TR': 2.000, # duration (sec) per volume
            'volumes': 5, # number of whole-brain 3D volumes / frames
            'sync': '5', # character to use as the sync timing event; assumed to come at start of a volume
            'skip': 0, # number of volumes lacking a sync pulse at start of scan (for T1 stabilization)
            'sound': True # in test mode only, play a tone as a reminder of scanner noise
            }
        infoDlg = gui.DlgFromDict(MR_settings, title='fMRI parameters', order=['TR','volumes'])
        if not infoDlg.OK: core.quit()
        '''

        ########set button
        '''
        if int(expInfo['participant'])%2 == 0:
            expButton = '1'
            correctButton = '1'
        else:
            expButton = '2'
            correctButton = '2'
        '''
        ###################default button
        expButton = '1'
        correctButton = '1'


        #############RANDOMIZATION OF STIMULI
        list1 = []
        list2 = []
        currentLetter = "X"
        aCurrentLetter = "A"
        #array of letters to sample from
        lets = map(chr, range(65, 91))
        del lets[23]
        #print "here are lets", lets
        currentLetter = lets[randint(0,24)]
        #print currentLetter
        xPoolOfLetters = ["X" for i in range(100)]
        #print xPoolOfLetters
        xPoolOfLetters = xPoolOfLetters + (8 * lets)
        for i in range(12):
            xPoolOfLetters.append(lets[randint(0,24)])
        #print xPoolOfLetters


        aLets = lets
        del aLets[0]
        #print 'here are aLets', aLets
        aCurrentLetter = aLets[randint(0,23)]
        #print aCurrentLetter
        ############for ax, I'll just load the list with A's,
        ############and after sorting insert X after each A in the list
        axPoolOfA = ["A" for i in range(100)]
        #print axPoolOfA
        axPoolOfLetters = []
        axPoolOfLetters = axPoolOfLetters + (4 * aLets)
        for i in range(12):
            axPoolOfLetters.append(aLets[randint(0,23)])
        #print axPoolOfLetters
        shuffle(axPoolOfLetters)
        #print axPoolOfLetters

        def checkEqualIvo(lst):
            return not lst or lst.count(lst[0]) == len(lst)

        def organizeRemainder(pool, loc):
            listRemainder = []
            for m in range(loc, len(pool)):
                listRemainder.append(pool[m])
        #    print listRemainder
            shuffle(listRemainder)
        #    print listRemainder
            if checkEqualIvo(listRemainder) is True:
                shuffle(apol)
            else:
                h = 0
                for r in range(loc, len(pool)):
                    pool[r] = listRemainder[h]
                    h += 1
            return pool

        def xRandomizer(pol):
            repeatAttempt = False
            for x in range(0,len(pol)):
                if x > 2:
                    if pol[x] == pol[x-1]:
                        if pol[x] == pol[x-2]:
                            if pol[x] == pol[x-3]:
                                shuffle(pol)
                                repeatAttempt = True
                                break
            if repeatAttempt == True:
                xRandomizer(pol)
            else:
                perfectPool = list(pol)
        #        print perfectPool
                return perfectPool

        def axRandomizer(apoa, apol):
        #    print 'axRandomizer start'
            repeatAttempt = False
            newApol = []
            otherLetters = 0
            aLetters = 0
            totalLength = len(apol)+len(apoa)
            backup1 = list(apoa)
            backup2 = list(apol)
            #backup1 = backup1 + apoa
            #backup2 = backup2 + apol
        #    print apoa, apol
            for x in range(0,totalLength):
                seed = randint(0,2)
                #print seed
                if seed == 0 and apol != []:
                    aLetters = 0
                    otherLetters += 1
                    if x % 2 == 0:
                        oLL = 2
                    else:
                        oLL = 3
                    if otherLetters > oLL:
                        otherLetters = 0
                        if apoa == []:
                            newApol.append(apol.pop())
                        else:
                            newApol.append(apoa.pop())
                            aLetters += 1
                    else:
                        newApol.append(apol.pop())
                elif seed == 1 and apoa != []:
                    aLetters += 1
                    otherLetters = 0
                    if aLetters > 2:
                        aLetters = 0
                        if apol == []:
                            newApol.append(apoa.pop())
                            '''if (totalLength - x) == 0:
                                repeatAttempt = True
                                break'''
                        else:
                            newApol.append(apol.pop())
                            otherLetters += 1
                    else:
                        newApol.append(apoa.pop())
                else:
                    if apol == []:
                        if totalLength - len(newApol) > 5:
        #                    print totalLength - len(newApol)
                            repeatAttempt = True
                            break
                        else:
                            newApol.append(apoa.pop())
                    elif apoa == []:
                        newApol.append(apol.pop())
                    '''print"something went wrong, seed != 0 or 1"
                    print seed
                    repeatAttempt = True
                    break'''
        #        print newApol[x]
            if repeatAttempt == True:
        #        print 'axRandomizer reiterating'
        #        print len(newApol)
        #        print newApol
                axRandomizer(backup1, backup2)
            else:
        #        print "length of apoa and apol:"
        #        print len(apoa), len(apol)
                for x in range(0, len(newApol)+100):
                    if newApol[x] == 'A':
                        newApol.insert(x+1,'X')
                perfectPool = list(newApol)
        #        print "perfect pool ="
        #        print perfectPool
                return perfectPool

        xRandomizer(xPoolOfLetters)
        a = list(axPoolOfA)
        l = list(axPoolOfLetters)
        axRandomizer(a, l)
      Begin Routine:
        list1 = xRandomizer(xPoolOfLetters)
        print 'list1'
        #print list1
        list2 = list(axRandomizer(axPoolOfA, axPoolOfLetters))
        if type(list2) == None:
            while type(list2) == None:
                list2 = list(axRandomizer(axPoolOfA, axPoolOfLetters))
        print 'list2'
        #print list2
  Routine isi
    StaticComponent ISI_3
      stopVal [duration (s)] = .9
      startVal [time (s)] = 0.0
  Routine isi_2
    StaticComponent ISI_4
      stopVal [duration (s)] = 0.9
      startVal [time (s)] = 0.0
  Routine nBack
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Welcome_2
      text = $u"This is the 2-back task.\nYou will see individual letters on the screen throughout this experiment.\n Whenever the letter on the screen matches the one 2 letters before, press " + correctButton + ". \nThis screen will be up for 20 seconds.\n\t\t"
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      stopVal [duration (s)] = 20
      forceEndRoutine = False
      discard previous = False
      allowedKeys = '*'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine MRI_sync
    TextComponent text_2
      text = Waiting for trigger pulse...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      discard previous = False
      allowedKeys = '*'
      startVal [time (s)] = 0.0
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  Routine AreYouSure_
    TextComponent text_6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        After this point we won't stop the experiment.
        Unless there is a problem.

        Are you sure you are ready? If so,
        press any key.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
  Routine AreYouSure_
  Routine MRI_sync
  Routine RestingState
  Routine Welcome_AX
  Routine isi_2
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 312
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    Routine task
  LoopTerminator trials
  Routine Welcome_AX_2
  Routine isi_2
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 312
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    Routine task2
  LoopTerminator trials_2
  Routine nBack
  LoopInitiator trials_7 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = expInfo['Reps']
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    Routine fixation
    Routine trials_3
  LoopTerminator trials_7
  Routine RestingState
  Routine end
