PsychoPy2experiment version="1.81.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1.000,-1.000,-1.000]
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Experiment info = {u'Gender': u'female', u'Handedness': u'Right', u'participant': u'100'}
  Save csv file = True
  expName = Rosvold CPT
  logging level = debug
  Save excel file = True
  Units = use prefs
  Screen = 1
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Routines
  Routine end
    TextComponent text_9
      text = Thank you, the study is complete. Please wait patiently for the technician to assist you out of the MRI.
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent NS_stopRecording
      Begin Routine:
        ns.StopRecording()
  Routine first_slide
    TextComponent text_15
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        A fixation will be placed onscreen during your preliminary scans/set up.

        Press Space Bar to continue when your participant is ready for the experiment.

        Press Space Bar to go to the fixation screen now.
    KeyboardComponent key_resp_18
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
    TextComponent text_7
      text = +
      stopVal [frame N] = 120
      durationEstim = 2
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = 0.1
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    CodeComponent nBack_2
      Begin Routine:
        ns.sync()
        '''
        #pick random number from 1-100 for determining if this is an nBack round or not
        bias = randint(1, 100)
        print 'Bias:'
        print bias
        currentLetter = nBackLets[randint(0,25)]
        print currentLetter
        #check that enough rounds have passed to display an nBack
        if position-nBack >= 0:
            #determine if next letter will be new or a nBack match, currently 50/50 odds
            if bias < 50:
                currentLetter = oldLets[position-nBack]
                print "nbacked"
                print currentLetter
                corAns = '1'
            else:
                corAns = 'None'
        '''
    KeyboardComponent key_resp_11
      correctAns = 'num_multiply','8'
      stopVal [frame N] = 120
      durationEstim = 1
      forceEndRoutine = True
      startEstim = 1
      allowedKeys = 'num_multiply','8'
      startVal [frame N] = 59
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  Routine trials_3
    TextComponent text_8
      text [set every repeat] = $letters
      stopVal [frame N] = 60
      durationEstim = .985
      startEstim = 0
      startVal [frame N] = 0
      letterHeight = .5
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    KeyboardComponent key_resp_10
      correctAns = $correctButton
      storeCorrect = True
      stopVal [frame N] = 60
      durationEstim = .985
      forceEndRoutine = False
      startEstim = 0
      allowedKeys [set every repeat] = correctButton
      startVal [frame N] = 0
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    CodeComponent code_4
      Begin Experiment:
        '''
        corAns = ''
        nBackLetter = 'A'
        currentLetter = 'A'
        oldLets = []
        nBackLets = []
        position=0
        correctAns=0
        nBack = 2
        print nBack
        #array of letters to sample from
        nBackLets = map(chr, range(65, 91))
        '''
      Begin Routine:
        '''
        oldLets.append(currentLetter)
        nBackYesNo = 'N/A'
        if position-nBack >= 0:
            if currentLetter == oldLets[position-nBack]:
                corAns = '1'
                nBackYesNo = 'Yes'
            else:
                corAns = 'None'
                nBackYesNo = 'No'
        '''
        #ns.send_event( 'lttr', label="Letter Presented", timestamp=egi.ms_localtime(), table = {'ltr-' : letters, 'nbk?' : nBackYesNo, 'time' : egi.ms_localtime()} )
        ns.send_event( 'lttr', label="Letter Presented", timestamp=egi.ms_localtime(), table = {'ltr-' : letters, 'time' : egi.ms_localtime()} )
      End Routine:
        '''
        nBackLoop.addData("nBack_Letter", currentLetter, nBackLoop.thisN)
        if currentLetter == oldLets[position-nBack]:
            correctButton = '1'
        else:
            correctButton = None

        if (key_resp_10.keys == correctButton):
            evaluation = 'correct'
            keyResp = key_resp_10.keys
        else:
            evaluation = 'incorrect'
            keyResp = 'None'

        ns.send_event( 'rsp-', label="Subject Response", timestamp=egi.ms_localtime(), table = {'resp': keyResp, 'eval': evaluation, 'time' : egi.ms_localtime()} )

        position = position + 1
        '''
        ns.send_event( 'rsp-', label="Subject Response", timestamp=egi.ms_localtime(), table = {'resp': key_resp_10.keys, 'eval': '?', 'time' : egi.ms_localtime()} )
    KeyboardComponent key_resp_12
      correctAns = 'num_multiply'
      stopVal [frame N] = 60
      durationEstim = .985
      forceEndRoutine = False
      startEstim = 0
      discard previous = False
      allowedKeys = 'num_multiply'
      startVal [frame N] = 0
      store = all keys
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  Routine trial
    TextComponent Welcome
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to the CTE Study

        Press any button when ready to continue
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent init
      Begin Experiment:
        '''
        Total time to record MRI sequence:
            Seconds: ~329.9789
            Minutes: 5.4996483333333333333333333333333
        Expected time:
            Seconds: 330
            Minutes: 5.5
        '''

        import csv

        ################################
        ############## NS Initialization
        # >>> import and initialization >>>
        import egi.fake as egi
        ms_localtime = egi.ms_localtime
        ns = egi.Netstation()
        ns.initialize('10.10.10.52', 55513)
        #ns.BeginSession()
        #ns.sync()
        ############## NS Initialization
        ################################

        ########
        iRanWhat= 0
        continueRunning = True
        while continueRunning:
            corAns = '0'
            nBackLetter = 'A'
            currentLetter = 'A'
            oldLets = []
            correctButton = []
            nBackLets = []
            position=0
            correctAns= 0
            nBack = 2
            #array of letters to sample from
            nBackLets = map(chr, range(65, 91))
            counter = 0
            howManyTimes = 10
            while(position<howManyTimes):
               #pick random number from 1-100 for determining if this is an nBack round or not
               bias = randint(1, 100)
               currentLetter = nBackLets[randint(0,25)]
               #check that enough rounds have passed to display an nBack
               if position-nBack >= 0:
                  #determine if next letter will be new or a nBack match, currently 50/50 odds
                  if bias < 50:
                     currentLetter = oldLets[position-nBack]
                     corAns = '1'
                     counter += 1
                  else:
                     corAns = None
               # update component parameters for each repeat
               correctButton.append(corAns)
               oldLets.append(currentLetter)
               position = position + 1
            iRanWhat += 1
            if counter == (howManyTimes/2):
                print "nbacks = %d" % counter
                continueRunning = False
                print oldLets
                print correctButton
                csvDictionary = {'letters': oldLets, 'correctButton':correctButton}
                print csvDictionary

        with open('stimOrder.csv', 'wb') as outfile:
            writer = csv.writer(outfile, delimiter = ",")
            writer.writerow(csvDictionary.keys())
            writer.writerows(zip(*csvDictionary.values()))

        print "It took %d runs to get this perfect set." % iRanWhat
  Routine nBack
    KeyboardComponent key_resp_9
      stopVal [frame N] = 18
      durationEstim = 30
      forceEndRoutine = False
      startEstim = 0
      discard previous = False
      allowedKeys = '*'
      startVal [frame N] = 0
      store = all keys
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    ImageComponent image
      stopVal [frame N] = 18
      durationEstim = 30
      startEstim = 0
      startVal [frame N] = 0
      image = N-back Instructions.jpg
      size = [1.125, 1.5]
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    CodeComponent NS_BeginTrials_instr
      Begin Routine:
        ns.sync()
        ns.send_event( 'inst', label="Begin Instructions", timestamp=egi.ms_localtime(), table = {'time' : egi.ms_localtime()} )
  Routine MRI_sync
    TextComponent text_2
      text = Waiting for trigger pulse...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      correctAns = 'num_multiply'
      forceEndRoutine = True
      allowedKeys = 'num_multiply','8'
      startVal [time (s)] = 0.0
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    CodeComponent NS_startRecording
      Begin Routine:
        ns.StartRecording()
  Routine interrupt_overTR
    TextComponent text_12
      text = Experimenter: if the functional scan is still running, wait for it to finish/cancel, then press SPACEBAR for next sync screen.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_14
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine AreYouSure_
    TextComponent text_6
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        After this point we won't stop the experiment, unless there is a problem.

        Are you sure you are ready? If so, press any key.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine init_fix
    TextComponent text_14
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_17
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine first_slide
  Routine init_fix
  Routine trial
  Routine AreYouSure_
  Routine MRI_sync
  Routine nBack
  LoopInitiator nBackLoop loopType="TrialHandler"
    conditionsFile = stimOrder.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'letters': u'F', 'correctButton': 0},
      {'letters': u'I', 'correctButton': 0},
      {'letters': u'F', 'correctButton': 1},
      {'letters': u'W', 'correctButton': 0},
      {'letters': u'Y', 'correctButton': 0},
      {'letters': u'W', 'correctButton': 1},
      {'letters': u'Y', 'correctButton': 1},
      {'letters': u'K', 'correctButton': 0},
      {'letters': u'Y', 'correctButton': 0},
      {'letters': u'D', 'correctButton': 0},
      {'letters': u'Y', 'correctButton': 1},
      {'letters': u'D', 'correctButton': 1},
      {'letters': u'G', 'correctButton': 0},
      {'letters': u'P', 'correctButton': 0},
      {'letters': u'R', 'correctButton': 0},
      {'letters': u'C', 'correctButton': 0},
      {'letters': u'L', 'correctButton': 0},
      {'letters': u'H', 'correctButton': 0},
      {'letters': u'L', 'correctButton': 1},
      {'letters': u'P', 'correctButton': 0},
      {'letters': u'L', 'correctButton': 1},
      {'letters': u'S', 'correctButton': 0},
      {'letters': u'L', 'correctButton': 1},
      {'letters': u'S', 'correctButton': 0},
      {'letters': u'L', 'correctButton': 1},
      {'letters': u'S', 'correctButton': 1},
      {'letters': u'L', 'correctButton': 1},
      {'letters': u'C', 'correctButton': 0},
      {'letters': u'S', 'correctButton': 0},
      {'letters': u'U', 'correctButton': 0},
      {'letters': u'K', 'correctButton': 0},
      {'letters': u'U', 'correctButton': 1},
      {'letters': u'N', 'correctButton': 0},
      {'letters': u'U', 'correctButton': 1},
      {'letters': u'N', 'correctButton': 0},
      {'letters': u'T', 'correctButton': 0},
      {'letters': u'P', 'correctButton': 0},
      {'letters': u'T', 'correctButton': 1},
      {'letters': u'P', 'correctButton': 1},
      {'letters': u'T', 'correctButton': 1}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
    Routine fixation
    Routine trials_3
  LoopTerminator nBackLoop
  Routine interrupt_overTR
  Routine end
